<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="SubscribeSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Path</Name>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="StringProperty">
          <Value>/Joystick.bin</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Path" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Type>Timestamp</harp:Type>
        <harp:IsArray>false</harp:IsArray>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>AnalogInput</p1:Type>
        <p1:Mask>Port1</p1:Mask>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Touch</Name>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>Input</p1:Type>
        <p1:Mask>Port0</p1:Mask>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>StartTrigger</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>MessageBytes</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:MatrixWriter">
          <dsp:Path>Data\Test\YYYY-09-DDT13-19-49/Joystick.bin</dsp:Path>
          <dsp:Suffix>None</dsp:Suffix>
          <dsp:Overwrite>false</dsp:Overwrite>
          <dsp:Layout>ColumnMajor</dsp:Layout>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:CreateHarpMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Address>32</harp:Address>
          <harp:PayloadType>U8</harp:PayloadType>
          <harp:Payload>0</harp:Payload>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:IgnoreElements" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Touch</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Abs" />
      </Expression>
      <Expression xsi:type="GreaterThan">
        <Operand xsi:type="DoubleProperty">
          <Value>0.015</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DistinctUntilChanged" />
      </Expression>
      <Expression xsi:type="Condition">
        <Name>TouchDetect</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:WithLatestTimestamp.bonsai">
        <Name>Timestamp</Name>
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Lick</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="13" Label="Source2" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="5" To="10" Label="Source1" />
      <Edge From="5" To="12" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>